[
    {
        "object.className": "ProtImportMicrographs",
        "object.id": "2",
        "object.label": "1. import mics",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "",
        "filesPattern": "",
        "copyFiles": false,
        "emxFile": null,
        "mdFile": null,
        "sqliteFile": null,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.0,
        "amplitudeContrast": 0.1,
        "magnification": 56588,
        "samplingRateMode": 0,
        "samplingRate": 1.237,
        "scannedPixelSize": 7.0,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null
    },
    {
        "object.className": "XmippProtPreprocessMicrographs",
        "object.id": "57",
        "object.label": "2. downsample x5",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "orderComment": null,
        "doCrop": false,
        "cropPixels": 10,
        "doLog": false,
        "logA": 4.431,
        "logB": 0.4018,
        "logC": 336.6,
        "doRemoveBadPix": false,
        "mulStddev": 5,
        "doInvert": true,
        "doDownsample": true,
        "downFactor": 5.0,
        "doDenoise": false,
        "maxIteration": 50,
        "doSmooth": false,
        "sigmaConvolution": 2.0,
        "doHighPass": false,
        "highCutoff": 0.002,
        "highRaised": 0.001,
        "doLowPass": false,
        "lowCutoff": 0.4,
        "lowRaised": 0.001,
        "doNormalize": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "2.outputMicrographs"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "112",
        "object.label": "3. ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": false,
        "windowSize": 512,
        "lowRes": 50.0,
        "highRes": 10.0,
        "minDefocus": 500.0,
        "maxDefocus": 40000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "57.outputMicrographs"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "170",
        "object.label": "4a. xmipp picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "saveDiscarded": false,
        "doInteractive": true,
        "inputMicrographs": "57.outputMicrographs"
    },
    {
        "object.className": "XmippProtExtractParticles",
        "object.id": "205",
        "object.label": "5. extract particles",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "downFactor": 1.0,
        "boxSize": 110,
        "doBorders": false,
        "doRemoveDust": true,
        "thresholdDust": 3.5,
        "doInvert": false,
        "doFlip": true,
        "doNormalize": true,
        "normType": 2,
        "backRadius": -1,
        "patchSize": -1,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "ctfRelations": "112.outputCTF",
        "inputCoordinates": "170.outputCoordinates"
    },
    {
        "object.className": "ProtImportVolumes",
        "object.id": "253",
        "object.label": "6. import vol",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "",
        "filesPattern": "",
        "copyFiles": false,
        "emdbId": null,
        "setHalfMaps": false,
        "half1map": null,
        "half2map": null,
        "samplingRate": 6.185,
        "setOrigCoord": false,
        "x": null,
        "y": null,
        "z": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30
    },
    {
        "object.className": "XmippProtProjMatch",
        "object.id": "299",
        "object.label": "7. projection matching",
        "object.comment": "\n",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useGpu": true,
        "gpuList": "0",
        "useInitialAngles": false,
        "cleanUpFiles": false,
        "doCTFCorrection": true,
        "doAutoCTFGroup": true,
        "ctfGroupMaxDiff": 0.1,
        "ctfGroupMaxResol": 5.6,
        "setOfDefocus": "",
        "paddingFactor": 2.0,
        "wienerConstant": -1.0,
        "maskType": 1,
        "maskRadius": 55,
        "numberOfIterations": 3,
        "innerRadius": "28",
        "outerRadius": "55",
        "availableMemory": 2,
        "angSamplingRateDeg": "3 2 1 0.5",
        "maxChangeInAngles": "1000 8 4 2",
        "perturbProjectionDirections": "0",
        "projectionMethod": 1,
        "paddingAngularProjection": 1.0,
        "kernelAngularProjection": 2,
        "maxChangeOffset": "2x1000 5",
        "search5DShift": "2x5",
        "search5DStep": "2",
        "doRestricSearchbyTiltAngle": false,
        "tilt0": -91.0,
        "tiltF": -91.0,
        "symmetry": "i1",
        "symmetryGroupNeighbourhood": "",
        "onlyWinner": "0",
        "discardImages": 0,
        "minimumCrossCorrelation": "0.1",
        "discardPercentage": "10",
        "discardPercentagePerClass": "10",
        "doScale": false,
        "scaleStep": "1",
        "scaleNumberOfSteps": "3",
        "projMatchingExtra": "",
        "performAlign2D": false,
        "doAlign2D": "0",
        "align2DIterNr": "4",
        "align2dMaxChangeOffset": "2x1000 2x10",
        "align2dMaxChangeRot": "2x1000 2x20",
        "reconstructionMethod": 0,
        "fourierMaxFrequencyOfInterest": 0.25,
        "fourierReconstructionExtraCommand": "",
        "artLambda": "0.2",
        "artReconstructionExtraCommand": "-k 0.5 -n 10 ",
        "wbpReconstructionExtraCommand": "",
        "doComputeResolution": true,
        "doSplitReferenceImages": "1",
        "doLowPassFilter": true,
        "useFscForFilter": true,
        "constantToAddToFiltration": "0.05",
        "constantToAddToMaxReconstructionFrequency": "0.1",
        "mpiJobSize": 8,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 4,
        "inputParticles": "205.outputParticles",
        "input3DReferences": "253.outputVolume"
    },
    {
        "object.className": "EmanProtBoxing",
        "object.id": "395",
        "object.label": "4b Eman boxer",
        "object.comment": "\n",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "boxSize": -1,
        "particleSize": -1,
        "device": "cpu",
        "invertY": false,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "inputMicrographs": "57.outputMicrographs"
    }
]